PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = AliceBlue
  expName = preference_ratings
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Routines
  Routine internal_state
    SliderComponent IS_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      saveStartStop = False
      size = (1000, 30)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0,1000
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    TextComponent ISlabel1
      color = MidnightBlue
      letterHeight = 25
      pos = (-500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelL
      wrapWidth = 400
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    TextComponent ISlabel2
      color = MidnightBlue
      letterHeight = 25
      pos = (500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelR
      wrapWidth = 400
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    TextComponent IS_text
      color = MidnightBlue
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
      wrapWidth = 1200
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    CodeComponent IS_code
      Code Type = Py
      Begin Experiment:
        IScount = 0
      Begin Routine:
        win.mouseVisible = False

        IS_slider.marker.size=(.1,2)
        IS_slider.marker.color='Red'

        mouse.setPos((-500,0))
        IS_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[0]
        IS_slider.markerPos=500 + (x)

        #if mouse.getPressed()[0]:
        #    if IScount <= 5:
        #        IS1_pre_trials.addData('ISval', IS_slider.markerPos)
        #    else:
        #        IS2_post_trials.addData('ISval', IS_slider.markerPos)
        #    continueRoutine = False
      End Routine:
        IScount += 1

        if IScount <= 5:
            IS1_pre_trials.addData('ISval', (IS_slider.markerPos / 10))
        else:
            IS2_post_trials.addData('ISval', (IS_slider.markerPos / 10))

        core.wait(0.5)
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine liking
    SliderComponent like_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'Most disliked sensation imaginable','Dislike extremely','Dislike very much','Dislike moderately','Dislike slightly','Neutral','Like slightly','Like moderately','Like very much','Like extremely','Most liked sensation imaginable'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = -100, -62.89, -41.58, -17.59, -5.92, 0, 6.25, 17.82, 44.43, 65.72, 100
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    TextComponent like_instructions
      color = Black
      letterHeight = 40
      pos = (-300, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How much do you like or dislike this sample?
      wrapWidth = 1000
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    TextComponent CupNoLHS
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tray
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    CodeComponent like_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        like_slider.marker.size=(2,.1);
        like_slider.marker.color='Red';

        mouse.setPos((0,0))
        like_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        like_slider.markerPos=(x / 5)

        if mouse.getPressed()[0]:
            trials.addData('Like', like_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine tastecup
    TextComponent tray_display_2
      color = black
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tray
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    KeyboardComponent start_ratings_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent press_enter_2
      color = black
      letterHeight = 30
      pos = (0, -100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press enter to rate
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    TextComponent taste_instr
      color = black
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Taste:
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    CodeComponent code_2
      Code Type = Py
      End Routine:
        core.wait(0.5)
  Routine intense
    SliderComponent intense_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'No sensation','Barely detectable', 'Weak', 'Moderate', 'Strong', 'Very strong', 'Strongest imaginable sensation of any kind'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0, 1.4,6,17,35,51,100
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    TextComponent intense_instructions
      color = Black
      letterHeight = 40
      pos = (-300,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How intense is this sample overall?
      wrapWidth = 1000
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    TextComponent CupNoLMS
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tray
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    CodeComponent intense_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        intense_slider.marker.size=(2,.1);
        intense_slider.marker.color='Red';

        mouse.setPos((0,0))
        intense_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        intense_slider.markerPos= (x / 5)

        if mouse.getPressed()[0]:
            trials.addData('Intense', intense_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine sweet
    SliderComponent sweet_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      labels = 'No sensation','Barely detectable', 'Weak', 'Moderate', 'Strong', 'Very strong', 'Strongest imaginable sensation of any kind'
      pos = (500,0)
      saveStartStop = False
      size = (20,800)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = 0, 1.4,6,17,35,51,100
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    TextComponent sweet_question
      color = Black
      letterHeight = 40
      pos = (-300,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How intense is the sweetness of this sample?
      wrapWidth = 1000
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    TextComponent CupNoSweet
      color = MidnightBlue
      letterHeight = 40
      pos = (-300, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tray
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    CodeComponent sweet_code
      Code Type = Py
      Begin Routine:
        mouse = event.Mouse(visible=False)

        sweet_slider.marker.size=(2,.1);
        sweet_slider.marker.color='Red';

        mouse.setPos((0,0))
        sweet_slider.markerPos=0
      Each Frame:
        x = mouse.getPos()[1]
        sweet_slider.markerPos= (x/5)

        if mouse.getPressed()[0]:
            trials.addData('Sweet', sweet_slider.markerPos)
            continueRoutine = False
      End Routine:
        core.wait(0.5)
  Routine tray_2
    TextComponent tray_display
      color = black
      letterHeight = 50
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $TrayNo
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    KeyboardComponent start_ratings
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent press_enter
      color = black
      letterHeight = 30
      pos = (0, -100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press enter to begin
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    CodeComponent code
      Code Type = Py
      End Routine:
        core.wait(0.5)
  Routine VAS
    SliderComponent vas_slider
      color = Black
      forceEndRoutine = False
      granularity = 0
      saveStartStop = False
      size = (1000,30)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['slider']
      ticks = (0,1000)
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    TextComponent vas_question
      color = Black
      letterHeight = 40
      pos = (0, 100)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $VASq
      wrapWidth = 1200
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    TextComponent CupNo
      color = MidnightBlue
      letterHeight = 40
      pos = (0, 200)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $tray
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    CodeComponent vas_code
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False

        vas_slider.marker.size=(.1,2)
        vas_slider.marker.color='Red'

        mouse_vas.setPos((-500,0))
        vas_slider.markerPos=0
      Each Frame:
        x = mouse_vas.getPos()[0]
        vas_slider.markerPos= (500 + x)

        #if mouse.getPressed()[0]:
        #    trials.addData('VAS', vas_slider.markerPos)
        #    continueRoutine = False
      End Routine:
        VAS_trials.addData('VAS', (vas_slider.markerPos / 10))
        core.wait(0.5)
    TextComponent vas_label1
      color = MidnightBlue
      letterHeight = 25
      pos = (-500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $VASLabelL
      wrapWidth = 400
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    TextComponent vas_label2
      color = MidnightBlue
      letterHeight = 25
      pos = (500, -43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $VASLabelR
      wrapWidth = 400
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    MouseComponent mouse_vas
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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  Routine end
    TextComponent done
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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  Routine Preference
    TextComponent text
      color = Black
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Preference ratings - Press enter to continue
      wrapWidth = 2000
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    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator IS1_pre_trials loopType="TrialHandler"
    conditionsFile = internal_states.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'How hungry are you right now?'), ('LabelL', 'Not hungry at all'), ('LabelR', 'More hungry than anything'), ('Quality', 'Hungry')]),
      OrderedDict([('Question', 'How full are you right now?'), ('LabelL', 'Not full at all'), ('LabelR', 'More full than anything'), ('Quality', 'Full')]),
      OrderedDict([('Question', 'How thirsty are you right now?'), ('LabelL', 'Not thirsty at all'), ('LabelR', 'More thirsty than anything'), ('Quality', 'Thirsty')]),
      OrderedDict([('Question', 'How anxious are you right now?'), ('LabelL', 'Not anxious at all'), ('LabelR', 'More anxious than anything'), ('Quality', 'Anxious')]),
      OrderedDict([('Question', 'How badly do you need to pee right now?'), ('LabelL', 'Not at all'), ('LabelR', 'More than anything'), ('Quality', 'Pee')])]
    Routine internal_state
  LoopTerminator IS1_pre_trials
  LoopInitiator trayno loopType="TrialHandler"
    conditionsFile = outer_loop.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('TrayNo', 'Tray 1 Ratings')]),
      OrderedDict([('TrayNo', 'Tray 2 Ratings')])]
    Routine tray_2
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = tastes.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('tray', 'Cup 1')]),
        OrderedDict([('tray', 'Cup 2')]),
        OrderedDict([('tray', 'Cup 3')]),
        OrderedDict([('tray', 'Cup 4')]),
        OrderedDict([('tray', 'Cup 5')]),
        OrderedDict([('tray', 'Cup 6')]),
        OrderedDict([('tray', 'Cup 7')]),
        OrderedDict([('tray', 'Cup 8')]),
        OrderedDict([('tray', 'Cup 9')]),
        OrderedDict([('tray', 'Cup 10')]),
        OrderedDict([('tray', 'Cup 11')]),
        OrderedDict([('tray', 'Cup 12')])]
      Routine tastecup
      Routine intense
      Routine sweet
      Routine liking
      LoopInitiator VAS_trials loopType="TrialHandler"
        conditionsFile = vas_loop.xlsx
        loopType = sequential
        nReps = 1
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        conditions:
          [OrderedDict([('VASq', 'How much do you want to eat this sample?'), ('VASLabelL', 'Do not want at all'), ('VASLabelR', 'Want more than anything'), ('Quality', 'Want')]),
          OrderedDict([('VASq', 'How familiar is this sample?'), ('VASLabelL', 'Not familiar at all'), ('VASLabelR', 'More familiar than anything'), ('Quality', 'Familiar')]),
          OrderedDict([('VASq', 'How creamy is this sample?'), ('VASLabelL', 'Not creamy at all'), ('VASLabelR', 'More creamy than anything'), ('Quality', 'Creamy')]),
          OrderedDict([('VASq', 'How fatty is this sample?'), ('VASLabelL', 'Not fatty at all'), ('VASLabelR', 'More fatty than anything'), ('Quality', 'Fatty')])]
        Routine VAS
      LoopTerminator VAS_trials
    LoopTerminator trials
    Routine Preference
  LoopTerminator trayno
  LoopInitiator IS2_post_trials loopType="TrialHandler"
    conditionsFile = internal_states.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Question', 'How hungry are you right now?'), ('LabelL', 'Not hungry at all'), ('LabelR', 'More hungry than anything')]),
      OrderedDict([('Question', 'How full are you right now?'), ('LabelL', 'Not full at all'), ('LabelR', 'More full than anything')]),
      OrderedDict([('Question', 'How thirsty are you right now?'), ('LabelL', 'Not thirsty at all'), ('LabelR', 'More thirsty than anything')]),
      OrderedDict([('Question', 'How anxious are you right now?'), ('LabelL', 'Not anxious at all'), ('LabelR', 'More anxious than anything')]),
      OrderedDict([('Question', 'How badly do you need to pee right now?'), ('LabelL', 'Not at all'), ('LabelR', 'More than anything')])]
    Routine internal_state
  LoopTerminator IS2_post_trials
  Routine end
